PsychoPy2experiment version="2026.2.4"
Settings
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = (1024, 768)
  expName = final_project
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine instructions_encoding
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    CodeComponent initialization
      Code Type = Auto->JS
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      Begin Experiment:
        import csv
        import glob
        import random as r
        import numpy as np

        condition=0
        dev_mode=True
        encode_time=1
        keyword_color='red'

        stimulus_filename='test_stimulus_color.csv'

        #print(glob.glob('*'))

        with open(stimulus_filename, mode="r",newline='',encoding="utf-8") as file:
            reader = csv.reader(file)

            if condition==0:
                sentence_cols=[6,8,9]
            elif condition==1:
                sentence_cols=[7,8,10]
            else:
                raise ValueError(f"Condition is {condition}. Condition must be 0 or 1")


            sentence_list=[row[i] for row in reader for i in sentence_cols ]
            file.seek(0)
            word_cols=[0,1,2,3,4,5]
            word_list=[row[i] for row in reader for i in word_cols]
        n_sentences=len(sentence_list)
        n_words=len(word_list)

        instructions_reformatted=f'You are about to see a series of sentences. Read each sentence and take note of the {keyword_color} word. You will be asked to recall the {keyword_color} word.\n\nExample: The quick brown fox [color={keyword_color}]jumps[/color] over the lazy dog.\n\nPress the spacebar to continue.'

        if dev_mode:
            print(sentence_list)
            print(word_list)
            print(f"s={n_sentences/n_words}")
        s_order=np.arange(n_sentences)
        w_order=np.arange(n_words)
        r.shuffle(s_order)
        r.shuffle(w_order)
    TextboxComponent instructions_encoding_text
      bold = False
      durationEstim = 20
      editable = False
      formattingSyntax = md
      letterHeight = 0.1
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      text [set every frame] = $instructions_reformatted
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    KeyboardComponent key_resp_encoding_instructions
      allowedKeys = 'space'
      durationEstim = 20
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine encoding
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    TextboxComponent encoding_text
      bold = False
      editable = False
      formattingSyntax = md
      letterHeight = 0.1
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = encode_time
      text [set every frame] = $sentence_reformatted
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    CodeComponent encoding_code
      Code Type = Auto->JS
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      Begin Routine:
        if dev_mode:
            print((encoding_loop.thisN,sentence_list[s_order[encoding_loop.thisN]]))

        sentence_reformatted=sentence_list[s_order[encoding_loop.thisN]].replace('keyword_color',keyword_color)
  Routine instructions_test
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    TextboxComponent instructions_test_text
      bold = False
      durationEstim = 20
      editable = False
      formattingSyntax = md
      letterHeight = 0.1
      size [set every repeat] = (1.6, 1)
      startVal [time (s)] = 0.0
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      text:
        You are about to see a series of words. Indicate whether you saw the word in the previous sentence list and your confidence in your response as follows:

        1/a: Confident No
        2/f: Unsure No
        3/j: Unsure Yes
        4/;: Confident Yes

        Press the spacebar to continue.
    KeyboardComponent key_resp_test_instructions
      allowedKeys = 'space'
      durationEstim = 20
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test
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    TextboxComponent test_text
      bold = False
      editable = False
      formattingSyntax = md
      letterHeight = 0.1
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = encode_time
      text [set every frame] = $word_list[w_order[test_loop.thisN]]
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    CodeComponent test_code
      Code Type = Auto->JS
    KeyboardComponent key_resp_test
      allowedKeys = 'y','n','left','right','space'
      durationEstim = 3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions_encoding
  LoopInitiator encoding_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = n_sentences
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    Routine encoding
  LoopTerminator encoding_loop
  Routine instructions_test
  LoopInitiator test_loop loopType="TrialHandler"
    loopType = sequential
    nReps = n_words
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    Routine test
  LoopTerminator test_loop
